PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'../../data/%s/ID%sS%s_%s_%s_%s/ID%sS%s_%s_%s_%s' % (expInfo['save_in'], expInfo['ID'], expInfo['session'], expInfo['surname'], expInfo['first_name'], expInfo['date'], expInfo['ID'], expInfo['session'], expInfo['surname'], expInfo['first_name'], expInfo['date'])
  Experiment info = {'ID': '001', 'first_name': 'Kai', 'surname': 'Rothe', 'age': '25', 'gender': 'male', 'session': '01', 'save_in': 'personal', 'viewing_distance_cm': '100', 'mean_luminance_cdpm2': '40', 'monitor_type': 'testMonitor'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2025.1.1
  Window size (pixels) = [1536, 864]
  expName = experiment
  keyboardBackend = PsychToolbox
  runMode = 0
  rush = True
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Routines
  Routine Preparation
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    CodeComponent GetExperimentalInfo
      Code Type = Py
      Before Experiment:
        # from psychopy import visual, gui, logging
        # import numpy as np
        import yaml
        # import os
        import math
        import pandas as pd
        import itertools
        import atexit
        import shutil
        from datetime import datetime

        # Parameters loaded / calculated from file
        ExpInfo_path = os.path.join(os.path.dirname(__file__), '../ExpInfo.yaml')
        with open(ExpInfo_path, 'r') as f:
            ExpInfo = yaml.safe_load(f)

        StimInfo = ExpInfo["Stimulus"]

        nReps_test = ExpInfo["Procedure&Conditions"]["NumberOfRepetitions"]
        nReps_train = ExpInfo["Procedure&Conditions"]["NumberOfPracticeRepetitions"]
        seed = ExpInfo["Procedure&Conditions"]["RandomSeed"]

        frequency = StimInfo["GaborPatch"]["SpatialFrequency_cpd"] # cycles per degree
        mitchell_contrast = StimInfo["GaborPatch"]["MitchellContrast"]
        sigma = StimInfo["GaborPatch"]["Sigma_degrees"] # degrees
        spacing = StimInfo["GaborPatch"]["PatchSize_sigma"] * sigma  # degrees
        jitter_amount = StimInfo["Jitter"]["Range_sigma"] * sigma  # max jitter in degrees

        n_rows = StimInfo["Grid"]["Rows"]
        n_col = StimInfo["Grid"]["Columns"]
        vertical_seperation = StimInfo["VerticalSeperation_degrees"]

        fixation_shape = StimInfo["Fixation"]["Shape"]
        fixation_duration = StimInfo["Fixation"]["Duration_s"] # seconds
        fixation_diameter = StimInfo["Fixation"]["Diameter_degrees"] # degrees

        # Ensure hardcoded parameters are correct
        assert StimInfo["Fixation"]["Color"] == "white", "Fixation stimulus  should be set to 'white'."
        assert StimInfo["Jitter"]["Type"] == "uniform", "Spatial jitter distribution should be set to 'uniform'."
      Begin Experiment:
        # Parameters by hand (dialog box)
        assert expInfo['monitor_type'] == win.monitor.name, f"Monitor setting (monitor type) incorrect: {win.monitor.name} (true) != {expInfo['monitor_type']} (given)."
        assert float(expInfo['viewing_distance_cm']) == win.monitor.getDistance(), f"Monitor setting (viewing distance) incorrect:  {win.monitor.getDistance()} (true) != {float(expInfo['viewing_distance_cm'])} (given)."
    CodeComponent GetTrialConditionSequence
      Code Type = Py
      Begin Experiment:
        # Create and save conditions sequence
        def get_frames_from_seconds(duration_s):
            refresh_rate = win.getActualFrameRate() # Hz
            return round(refresh_rate * duration_s)

        # Pre-compute orientation and timing
        session_index = int(expInfo["session"]) - 1 # starts with "001"
        if len(StimInfo["GaborPatch"]["Orientation_degrees"]) <= session_index:
            raise TypeError("Number of orientations <= session number.")
        else:
            orientation = StimInfo["GaborPatch"]["Orientation_degrees"][session_index]

        stimulus_duration = StimInfo["GaborPatch"]["Duration_s"]
        stimulus_frames = get_frames_from_seconds(stimulus_duration)

        # training and testing trials
        conditions = list(itertools.product(n_rows, StimInfo["HorizontalDisplacement_rows"]))
        conditions_df = pd.DataFrame(conditions, columns=['n_row', 'displacement_rows'])
        conditions_df['session'] = session_index
        conditions_df['orientation_degrees'] = orientation
        conditions_df["duration_frames"] = stimulus_frames
        conditions_df["duration_s"] = stimulus_duration
        conditions_df["state"] = "test"
        conditions_df.to_csv('conditions_temp_test.csv', index=False)
        conditions_df["state"] = "train" # training is test trials with less repetitions
        conditions_df.to_csv('conditions_temp_train.csv', index=False)

        # instruction trials
        instructions_filepath = "../instructions.csv" # hardcoded here
        instruction_conditions_df = pd.read_csv(instructions_filepath)
        instruction_conditions_df['session'] = session_index
        instruction_conditions_df['orientation_degrees'] = orientation
        instruction_conditions_df["duration_frames"] = instruction_conditions_df["duration_s"].apply(get_frames_from_seconds)
        instruction_conditions_df["state"] = "instruct"
        instruction_conditions_df.to_csv('conditions_temp_instruct.csv', index=False)
  Routine Fixation
    RoutineSettingsComponent Fixation
      stopVal [duration (s)] = 0.6
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    PolygonComponent FixationShape
      fillColor = white
      shape = circle
      size = (fixation_diameter, fixation_diameter)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixation_duration
      units = deg
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    CodeComponent PrintTrialNumber
      Code Type = Py
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      Begin Experiment:
        TRIAL_COUNT = 0 # start counting with 1
      Begin Routine:
        TRIAL_COUNT += 1
        print(f"{state} trial {TRIAL_COUNT}") # print to note down and refind errors
        thisExp.addData('global.thisN', TRIAL_COUNT) # save to compare with noted down global trial number
  Routine Stimulus
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    CodeComponent DisplayStimulus
      Code Type = Py
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      Begin Experiment:
        # Pre-Compute stimuli
        base_xys = {}
        gabor_arrays = {}
        for n_row_ in n_rows: # name n_row_ to avoid overwriting trial loop n_row condition
            # Pre-compute grid
            xs = np.linspace(-spacing * (n_col-1) / 2, spacing * (n_col-1) / 2, n_col)
            ys = np.linspace(0.0, spacing*(n_row_-1), n_row_)
            xys_upper = np.array([[x, y + vertical_seperation / 2] for y in ys for x in xs])
            xys_lower = np.array([[x, - y - vertical_seperation / 2] for y in ys for x in xs])
            xys = np.concatenate([xys_upper, xys_lower], axis = 0)
            base_xys[n_row_] = xys

            # Pre-compute orientations
            oris_upper = np.full((n_row_, n_col), orientation)
            oris_upper[:, n_col // 2 :] += 90
            oris_lower = np.full((n_row_, n_col), orientation)
            oris_lower[:, : n_col // 2] += 90
            oris = np.concatenate([oris_upper.flatten(), oris_lower.flatten()])

            # Pre-compute Gabor patches
            gabor_array = visual.ElementArrayStim(
                win=win,
                units='deg',
                nElements= 2 * n_row_ * n_col,
                elementTex='sin',
                elementMask='gauss',
                xys=xys,
                sizes=spacing,
                sfs=frequency,
                oris=oris,
                contrs=mitchell_contrast
            )
            gabor_arrays[n_row_] = gabor_array
      Begin Routine:
        # Decide for stimulus and duration
        gabor_array = gabor_arrays[n_row]

        # Randomize locations
        jitter = np.random.uniform(-jitter_amount, jitter_amount,
                                   size=(2 * n_row * n_col, 2))
        gabor_array.xys = base_xys[n_row] + jitter
        gabor_array.xys[:n_row * n_col, 0] += spacing * displacement_rows

        # Randomize phases
        # gabor_array.phases = np.random.uniform(0, 360, size=2 * n_rows * n_cols)
      Each Frame:
        if frameN < duration_frames:
            gabor_array.draw()
    PolygonComponent DisplayStimulusDummy
      contrast = 0.
      fillColor = white
      opacity = 0.
      saveStartStop = False
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent GetResponse
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardMonkeyComponent ReplayResponse plugin="psychopy-monkeys"
      comp = GetResponse
      pressKey = left
      pressMode = both
      saveStartStop = False
      startVal [time (s)] = 0.01
      stopVal [duration (s)] = 0.02
      syncScreenRefresh = False
    PolygonComponent Mask
      disabled = True
      fillColor = 0, 0, 0
      lineColor = 0, 0, 0
      shape = rectangle
      size = (15, 10)
      startVal [frame N] = duration_frames
      units = deg
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  Routine Wait
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    KeyboardComponent AnyButton
      allowedKeys = None
      forceEndRoutine = True
      startVal [time (s)] = 0.
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    TextComponent PressAnyButtonForNextTrialText
      letterHeight = 1.0
      startVal [time (s)] = 0
      text [set every repeat] = $"Press any button\nfor %d. trial" % (TRIAL_COUNT + 1)
      units = deg
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    KeyboardMonkeyComponent ReplayAnyButton plugin="psychopy-monkeys"
      comp = AnyButton
      pressKey = space
      pressMode = both
      saveStartStop = False
      startVal [time (s)] = 0.01
      stopVal [duration (s)] = 0.02
      syncScreenRefresh = False
  Routine Dialogue_1
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    CodeComponent DisplayDialogue_1
      Code Type = Py
      Begin Experiment:
        def displayDialogueToRepeat(loop):
            dlg = gui.DlgFromDict({'Repeat practice?': ['No', 'Yes']}, title='Continue?')
            if not dlg.OK or dlg.dictionary['Repeat practice?'] == 'No':
                loop.finished = True
      Begin Routine:
        displayDialogueToRepeat(instruction)
  Routine Dialogue_2
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    CodeComponent DisplayDialogue_2
      Code Type = Py
      Begin Routine:
        displayDialogueToRepeat(training)
  Routine QandASession
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    FormComponent QandAForm
      Data Format = rows
      Font = Noto Sans
      Item Padding = 0.05
      Items = C:/Users/kai.rothe/Documents/V1SH_experiment/experiment/QandA.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent CompleteFormButton
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
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    TextComponent TakeABreakText
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      text = Take a break!
      units = deg
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    KeyboardComponent AnyButton_2
      allowedKeys = None
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SaveData
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    CodeComponent SaveAdditionalData
      Code Type = Py
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      Begin Experiment:
        def save_experiment_files_robust():
            """Save experiment files using PsychoPy's auto-generated filename"""
            try:
                # 'filename' is auto-generated by Builder from Experiment Settings
                # It's already the full path without extension
                # E.g., 'data/participant001_myExperiment_2025-11-20_1435'
                dataDir = os.path.dirname(filename)
                baseName = os.path.basename(filename)

                # Files to save: (relative_path, original_filename, extension)
                files_to_save = [
                    ("", expName + '.psyexp', '.psyexp'),
                    ("..", "instructions.csv", '.csv'),
                    ("..", "ExpInfo.yaml", '.yaml'),
                    ("..", "QandA.csv", ".csv")
                ]

                for relative_path, source_filename, ext in files_to_save:
                    # Build the full source path correctly
                    if relative_path:
                        filepath = os.path.join(_thisDir, relative_path, source_filename)
                    else:
                        filepath = os.path.join(_thisDir, source_filename)

                    # Normalize the path to handle ".." properly
                    filepath = os.path.normpath(filepath)

                    print(f"Looking for: {filepath}")  # Debug print

                    if os.path.exists(filepath):
                        # Get modification date
                        modDate = datetime.fromtimestamp(
                            os.path.getmtime(filepath)
                        ).strftime('%Y-%m-%d_%H%M')

                        # Extract just the name without extension for renaming
                        source_base = os.path.splitext(source_filename)[0]

                        # Create destination filename
                        destFilename = f"{source_base}_mod-{modDate}{ext}"
                        destPath = os.path.join(dataDir, destFilename)

                        shutil.copy2(filepath, destPath)
                        print(f"Saved: {destFilename}")
                    else:
                        print(f"File not found: {filepath}")  # Debug print

            except Exception as e:
                logging.error(f'Could not save experiment files: {e}')
                print(f"Error in save_experiment_files_robust: {e}")  # Additional debug

        def get_psychopy_info():
            # Function to dynamically retrieve PsychoPy information
            psychopy_info = {
                "Hardware": {
                    "Display": {
                        "Type": win.monitor.name,
                        "MeanLuminance_cd/m2": expInfo['mean_luminance_cdpm2'],
                        "RefreshRate_Hz": expInfo['frameRate'],
                        "ViewingDistance_cm": expInfo["viewing_distance_cm"],
                        "GammaCorrection": win.monitor.getGammaGrid() is not None
                    },
                    "EyeTracker": {
                        "Usage": False # TODO: Replace with actual eye tracker check
                    }
                }
            }
            return psychopy_info

        def compare_and_update(yaml_file, psychopy_info):
            # Compare psychopy hardware with manual ExpInfo YAML file
            # and update values if necessary
            updated = False
            for section, values in psychopy_info.items():
                if section in yaml_file:
                    for key, value in values.items():
                        if key in yaml_file[section] and yaml_file[section][key] != value:
                            yaml_file[section][key] = value
                            updated = True

                else:
                    yaml_file[section] = values
                    updated = True

            if updated:
                print("Warning: ExpInfo file modified.")
                logging.warning("ExpInfo file modified.")

            return updated

        # Update ExpInfo with PsychoPy hardware info
        psychopy_info = get_psychopy_info()
        compare_and_update(ExpInfo, psychopy_info)

        # Save if computer fails / experiment is stopped by "esc"
        atexit.register(save_experiment_files_robust)

        # Save immediately at start
        save_experiment_files_robust()
      End Routine:
        # Save at the end
        save_experiment_files_robust()
  Routine End
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    TextComponent ThankYou
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you!
      units = deg
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Flow
  Routine Preparation
  LoopInitiator instruction loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine Wait
    LoopInitiator instruction_trials loopType="TrialHandler"
      conditionsFile = conditions_temp_instruct.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(2.0)), ('duration_s', np.float64(120.0)), ('comment', ' First a circle in the center is shown. Your task is to look at that circle and keep your gaze fixed on it. Keep your gaze fixed to the center for the whole time. Therewhile you are shown an image with textures. The upper texture has a boundary and the lower texture has a boundary as well. Your task is to decide weather the UPPER boundary is more to the left or the right of the lower texture. If you think that the UPPER boundary is more to the LEFT: press the "left" bu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,
        OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(-2.0)), ('duration_s', np.float64(120.0)), ('comment', ' '), ('session', np.int64(0)), ('orientation_degrees', np.int64(0)), ('duration_frames', np.int64(7198)), ('state', 'instruct')]),
        OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(1.0)), ('duration_s', np.float64(120.0)), ('comment', " Don't forget to always keep your gaze fixed to the center for the whole time. Use the circle to look at the center again."), ('session', np.int64(0)), ('orientation_degrees', np.int64(0)), ('duration_frames', np.int64(7201)), ('state', 'instruct')]),
        OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(-1.0)), ('duration_s', np.float64(120.0)), ('comment', None), ('session', np.int64(0)), ('orientation_degrees', np.int64(0)), ('duration_frames', np.int64(7197)), ('state', 'instruct')])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
      Routine Fixation
      Routine Stimulus
      Routine Wait
    LoopTerminator instruction_trials
    Routine Dialogue_1
  LoopTerminator instruction
  Routine Wait
  LoopInitiator training loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine Wait
    LoopInitiator training_trials loopType="TrialHandler"
      conditionsFile = conditions_temp_train.csv
      loopType = random
      nReps = nReps_train
      random seed = seed + 1
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      Routine Fixation
      Routine Stimulus
      Routine Wait
    LoopTerminator training_trials
    Routine Dialogue_2
  LoopTerminator training
  Routine Wait
  LoopInitiator testing_trials loopType="TrialHandler"
    conditionsFile = conditions_temp_test.csv
    loopType = random
    nReps = nReps_test
    random seed = seed
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    conditions:
      [OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(1.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(0.5)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(0.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(-0.5)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(-1.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(1.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(0.5)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(0.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(-0.5)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(-1.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))])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
    Routine Fixation
    Routine Stimulus
    Routine Wait
  LoopTerminator testing_trials
  Routine Break
  Routine QandASession
  Routine SaveData
  Routine End
